<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.FlyPAD;assembly=Harp.FlyPAD"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SubjectInitialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>../output/{0:yyMMdd}_{0:HHmmss}/</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>OutputPath</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GUI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:CapacitanceValues" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Channel" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:EnableAcquisition" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="harp:EnableFlag">
                      <Value>Enabled</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="harp:EnableFlag">
                      <Value>Disabled</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Enabled" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>StartAcquisition</gui:Name>
              <gui:Enabled>false</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Start Acquisition</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>StartAcquisition</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:ButtonBuilder">
              <gui:Name>StopWorkflow</gui:Name>
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Stop Workflow</gui:Text>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>StopWorkflow</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:PropertyGridBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:HelpVisible>true</gui:HelpVisible>
              <gui:ToolbarVisible>true</gui:ToolbarVisible>
              <gui:AutoRefresh>false</gui:AutoRefresh>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>2</gui:ColumnCount>
              <gui:RowCount>1</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles />
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="ui:VisualizerWindow">
              <ui:Visible>true</ui:Visible>
              <ui:Location xsi:nil="true" />
              <ui:Size xsi:nil="true" />
              <ui:WindowState xsi:nil="true" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Read</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableAcquisitionPayload">
                <p1:EnableAcquisition>Enabled</p1:EnableAcquisition>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartAcquisition</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p1:CreateEnableAcquisitionPayload">
                <p1:EnableAcquisition>Enabled</p1:EnableAcquisition>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="27" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="11" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="21" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="25" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="32" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source2" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="35" Label="Source1" />
            <Edge From="34" To="35" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FlyPAD</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM8</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:GroupByRegister" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>FlyPAD.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:MessageWriter">
                <harp:FileName>../output/260805_103327/FlyPAD_.bin</harp:FileName>
                <harp:Suffix>None</harp:Suffix>
                <harp:Buffered>true</harp:Buffered>
                <harp:Overwrite>false</harp:Overwrite>
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:GetDeviceMetadata" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>device.yml</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:WriteAllText">
                <io:Path>../output/260805_103327/device.yml</io:Path>
                <io:Overwrite>false</io:Overwrite>
                <io:Append>false</io:Append>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="13" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="14" To="20" Label="Source1" />
            <Edge From="15" To="17" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StopWorkflow</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEnableAcquisitionPayload">
          <p1:EnableAcquisition>Disabled</p1:EnableAcquisition>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>